CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '', 'For a large screen, it may take a long time to read and collect all the images. E.g., for a screen of 830k files (images+thumbnails), it took ~2 hrs to process. However, this only needs to be done once as the file list is saved as part of the project file.', '', 'Recommended to save time: Drag/drop the images once for a single project (e.g, QC), save the project as a template and then copy/paste analysis modules from the other two by opening additional instances of CellProfiler, then save them as separate projects.']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
    Filter images?:Custom
    Select the rule criteria:or (extension does istif) (file does endwith ".mat")

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', 'The settings here allow the user to extract (assuming an ImageXpress microscope is used):', '* The Well and Site IDs from the filename, as well as the channel number.', '* The 5-digit Plate from the folder name.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:_(?P<CPD_WELL_POSITION>[a-p][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (extension does istif)
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:[\\\\\\\\/](?P<PlateID>[0-9]{5})
    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (extension does istif)
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<PlateID>[0-9]{5})_Illum
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does endwith ".mat")
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '', 'The settings her match the channels by the channel number collected in the Metadata module.', 'Setting the image set matching method to "Metadata" has the advantage of omitting sites in which there is a metadata mismatch, i.e, missing files.']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
    Assign a name to:Images matching rules
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    Match metadata:[{'IllumRNA': u'PlateID', u'OrigAGP': u'PlateID', 'IllumMito': u'PlateID', 'IllumER': u'PlateID', u'IllumDNA': u'PlateID', u'OrigER': u'PlateID', 'IllumAGP': u'PlateID', u'OrigDNA': u'PlateID', u'OrigMito': u'PlateID', u'OrigRNA': u'PlateID'}, {u'OrigER': u'CPD_WELL_POSITION', u'OrigAGP': u'CPD_WELL_POSITION', 'IllumMito': None, u'OrigRNA': u'CPD_WELL_POSITION', 'IllumER': None, 'IllumRNA': None, 'IllumAGP': None, u'OrigMito': u'CPD_WELL_POSITION', u'IllumDNA': None, u'OrigDNA': u'CPD_WELL_POSITION'}, {u'OrigER': u'Site', u'OrigAGP': u'Site', 'IllumMito': None, u'OrigRNA': u'Site',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
    Image set matching method:Metadata
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    Assignments count:10
    Single images count:0
    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:OrigDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:OrigER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:OrigRNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "4")
    Name to assign these images:OrigAGP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "5")
    Name to assign these images:OrigMito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "IllumDNA.mat")
    Name to assign these images:IllumDNA
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does endwith "IllumER.mat")
    Name to assign these images:IllumER
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does endwith "IllumRNA.mat")
    Name to assign these images:IllumRNA
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does endwith "IllumAGP.mat")
    Name to assign these images:IllumAGP
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does endwith "IllumMito.mat")
    Name to assign these images:IllumMito
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    Select the image type:Illumination function
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '', 'No grouping is needed, so this module is not enabled.']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
    Do you want to group your images?:No
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
CorrectIlluminationApply:[module_num:5|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notes:['Correct each image channel by dividing by the respective illumination correction image. See Singh et al. J Microscopy, 256(3): 231-6, 2014 for more details.']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
    Select the input image:OrigDNA
    Name the output image:DNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigER
    Name the output image:ER
    Select the illumination function:IllumER
    Select how the illumination function is applied:Divide
    Select the input image:OrigRNA
    Name the output image:RNA
    Select the illumination function:IllumRNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigAGP
    Name the output image:AGP
    Select the illumination function:IllumAGP
    Select how the illumination function is applied:Divide
    Select the input image:OrigMito
    Name the output image:Mito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide

IdentifyPrimaryObjects:[module_num:6|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notes:['Identify the nuclei based on the DNA image.', '', 'The settings here were chosen based on the image data and acqusition settings provided in Gustafsdottir et al, PLoS One 8, e80999, 2013. Changing the image acqusition settings may affect a number of these parameters:', '* Typical diameter of objects: From the display window menu, select Tools > Measure length. Click/drag to measure diameters of a few select nuclei.', '* Thresholding strategy: Global works fine in most cases, but Adaptive may work better if the background has non-uniform illumination. However, the illumination correction in CorrectIlluminationApply should mitigate the latter.', '* Thresholding method: Select the method which provides the best foreground/background separation. Adjust the threshold corrrection factor if the threshold is concistently above/below where you want it to be for most images tested. ', '* Lower threshold bound: Mouse over the background region to see the intensity variation in the lower-right of the display window.', '* Method to distinguish clumped objects: Use "Intensity" if the intensity gradient dividing touching nuclei are pretty clear, even if clumpy. Use "Shape" if the nuclei are usually well-separated (and "Intensity" doesn\\'t work).', '* Method to draw dividing lines between clumped objects: "Intensity" usually gives more realistic-looking boundary lines.', '* Size of smoothing filter/minimum distance between local maxima: Override defaults if nuclei are getting under/over-segmented.', '* Fill holes in identified objects: Currently set to "Never" since holes in nuclei may represent a phenotype. ']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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,150
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:20
    Suppress local maxima that are closer than this minimum allowed distance:20
    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Erase
    Maximum number of objects:700
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifySecondaryObjects:[module_num:7|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notes:['Identify the cells using the nuclei objects plus an image representative of the cell body. Several of the channels could suffice for this purpose, but we chose the RNA channel as optimal. Using the "Watershed-Image" option over the default "Propagate" methods seems to often better capture the cell boundaries, especially when the cells are confluent.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:AGP
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    Regularization factor:0.05
    Name the outline image:CellOutlines
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.003,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:8|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notes:['The cytoplasm is identified as the cell body "minus" the nuclei.']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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:9|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notes:['Measure the intensity characteristics from all channels, within all objects.']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
    Hidden:5
    Select an image to measure:DNA
    Select an image to measure:ER
    Select an image to measure:RNA
    Select an image to measure:AGP
    Select an image to measure:Mito
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm

MeasureObjectNeighbors:[module_num:10|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notes:['Measure the adjacency statistics for the nuclei. Nuclei within 1 pixel of each other are considered neighbors.']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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:1
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:11|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notes:['Measure the adjacency statistics for the cells. Cells within 5 pixels of each other are considered neighbors.']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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:5
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectRadialDistribution:[module_num:12|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notes:["Measure the radial intensity distribution characteristics in all objects. The object is 'binned' into radial annuli and statistics are measured for each bin."]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
    Hidden:4
    Hidden:1
    Hidden:1
    Select an image to measure:ER
    Select an image to measure:AGP
    Select an image to measure:Mito
    Select an image to measure:RNA
    Select objects to measure:Cells
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:13|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notes:['Measure the morpholigical features of all objects.']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
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Calculate the Zernike features?:Yes

MeasureTexture:[module_num:14|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notes:['Measure the texture features in all objects, against all 5 channels, using multiple spatial scales.']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
    Hidden:5
    Hidden:3
    Hidden:2
    Select an image to measure:DNA
    Select an image to measure:ER
    Select an image to measure:RNA
    Select an image to measure:AGP
    Select an image to measure:Mito
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei
    Texture scale to measure:3
    Angles to measure:Horizontal
    Texture scale to measure:5
    Angles to measure:Horizontal
    Measure Gabor features?:Yes
    Number of angles to compute for Gabor:4

SaveImages:[module_num:15|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notes:["Save the nuclei outlines to a file, in PNG format, in a 'outlines' sub-folder under the Default Output Folder."]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
    Select the type of image to save:Image
    Select the image to save:CellOutlines
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<CPD_WELL_POSITION>_\\\\g<Site>_cells
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines/\\\\g<PlateID>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToDatabase:[module_num:16|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notes:['Write the collected per-image and per-cell features to a MySQL database. A CellProfiler Analyst properties file is also created as well.', '', 'Change the table prefix to same as the folder (tables cannot start with a number)']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
    Database type:MySQL
    Database name:dbname
    Add a prefix to table names?:Yes
    Table prefix:analysis_
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    Output file location:Default Output Folder|/imaging/analysis/2008_12_04_Imaging_CDRP_for_MLPCN/PILOT_RERUN_GOODZERNICKES
    Create a CellProfiler Analyst properties file?:Yes
    Database host:hostname
    Username:username
    Password:password
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    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
    Calculate the per-well mean values of object measurements?:No
    Calculate the per-well median values of object measurements?:No
    Calculate the per-well standard deviation values of object measurements?:No
    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:Yes
    Select the images for which you want to save thumbnails:OrigAGP,OrigDNA,OrigER,OrigMito,OrigRNA
    Auto-scale thumbnail pixel intensities?:No
    Select the plate type:384
    Select the plate metadata:PlateID
    Select the well metadata:CPD_WELL_POSITION
    Include information for all images, using default values?:No
    Properties image group count:5
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:analysis
    Which objects should be used for locations?:Nuclei
    Enter a phenotype class table name if using the classifier tool:
    Export object relationships?:No
    Overwrite without warning?:Data only
    Access CPA images via URL?:Yes
    Select an image to include:OrigDNA
    Use the image name for the display?:No
    Image name:DNA
    Channel color:red
    Select an image to include:OrigER
    Use the image name for the display?:No
    Image name:ER
    Channel color:green
    Select an image to include:OrigRNA
    Use the image name for the display?:No
    Image name:RNA
    Channel color:blue
    Select an image to include:OrigAGP
    Use the image name for the display?:No
    Image name:AGP
    Channel color:cyan
    Select an image to include:OrigMito
    Use the image name for the display?:No
    Image name:Mito
    Channel color:magenta
    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
CreateBatchFiles:[module_num:17|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notes:['This module is used only if running the pipeline on a computing cluster; it is used to convert all paths to the format as seen by the computing node. If not using a computing cluster (i.e, you are running the pipeline locally), disable this module by clicking on the green checkmark to the left of the module name; the checkmark is grayed out when the module is disabled.']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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:/cbnt/cbimage/HCS
    Cluster root path:/cbnt/cbimage/HCS
