CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '', 'For a large screen, it may take a long time to read and collect all the images. E.g., for a screen of 830k files (images+thumbnails), it took ~2 hrs to process. However, this only needs to be done once as the file list is saved as part of the project file.', '', 'Recommended to save time: Drag/drop the images once for a single project (e.g, QC), save the project as a template and then copy/paste analysis modules from the other two by opening additional instances of CellProfiler, then save them as separate projects.']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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif)

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', 'The settings here allow the user to extract (assuming an ImageXpress microscope is used):', '* The UserStem prefix, and the Well and Site IDs from the filename, as well as the channel number.', '* The 5-digit Plate from the folder name.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:_(?P<CPD_WELL_POSITION>[a-p][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:[\\\\\\\\/](?P<PlateID>[0-9]{5})
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '', 'The settings her match the channels by the channel number collected in the Metadata module.', 'Setting the image set matching method to "Metadata" has the advantage of omitting sites in which there is a metadata mismatch, i.e, missing files.']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
    Assign a name to:Images matching rules
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    Match metadata:[{u'OrigER': u'PlateID', u'OrigAGP': u'PlateID', u'OrigRNA': u'PlateID', u'OrigDNA': u'PlateID', u'OrigMito': u'PlateID'}, {u'OrigER': u'CPD_WELL_POSITION', u'OrigAGP': u'CPD_WELL_POSITION', u'OrigRNA': u'CPD_WELL_POSITION', u'OrigDNA': u'CPD_WELL_POSITION', u'OrigMito': u'CPD_WELL_POSITION'}, {u'OrigER': u'Site', u'OrigAGP': u'Site', u'OrigRNA': u'Site', u'OrigDNA': u'Site', u'OrigMito': u'Site'}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:0
    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:OrigDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:OrigER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:OrigRNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "4")
    Name to assign these images:OrigAGP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "5")
    Name to assign these images:OrigMito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '', 'This pipeline performs per-plate grouping in order to produce an illumination image for each channel, for each plate. See Singh et al. J Microscopy, 256: 231-6, 2014 for more details.']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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:PlateID

CorrectIlluminationCalculate:[module_num:5|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notes:['Perform illumination correction on the DNA image using All images, the Regular method and a median filter. This will aggregate all images from the DNA channel and smooth the final result with the median filter in order to approximate the illumination distribution across the image. The filter size of 100 was chosen for an image size of 660x 493; changes in image size may require a proportional change in the filter size. See Singh et al. J Microscopy, 256(3):231-6, 2014 for more details.']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
    Select the input image:OrigDNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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notes:['Perform illumination correction on the ER image using All images, the Regular method and a median filter.See notes for the first CorrectIlluminationCalculate for more details.']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
    Select the input image:OrigER
    Name the output image:IllumER
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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notes:['Perform illumination correction on the RNA image using All images, the Regular method and a median filter.See notes for the first CorrectIlluminationCalculate for more details.']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
    Select the input image:OrigRNA
    Name the output image:IllumRNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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notes:['Perform illumination correction on the AGP image using All images, the Regular method and a median filter.See notes for the first CorrectIlluminationCalculate for more details.']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
    Select the input image:OrigAGP
    Name the output image:IllumAGP
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:9|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notes:['Perform illumination correction on the Mito image using All images, the Regular method and a median filter.See notes for the first CorrectIlluminationCalculate for more details.']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
    Select the input image:OrigMito
    Name the output image:IllumMito
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
SaveImages:[module_num:10|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notes:['Save the DNA illumination image as a MATLAB .mat file (to preserve floating point values). Each illumination image is prepended with the plate ID for matching against the respective images. This file will be used in the feature extraction pipeline.']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
    Select the type of image to save:Image
    Select the image to save:IllumDNA
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<PlateID>_IllumDNA
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    Saved file format:mat
    Output file location:Default Output Folder|/imaging/analysis/2008_12_04_Imaging_CDRP_for_MLPCN/Pilot_rerun_illumcorr/\\\\g<PlateID>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:11|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notes:['Save the ER illumination image as a MATLAB .mat file (to preserve floating point values). Each illumination image is prepended with the plate ID for matching against the respective images. This file will be used in the feature extraction pipeline.']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
    Select the type of image to save:Image
    Select the image to save:IllumER
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<PlateID>_IllumER
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    Saved file format:mat
    Output file location:Default Output Folder|/imaging/analysis/2008_12_04_Imaging_CDRP_for_MLPCN/Pilot_rerun_illumcorr/\\\\g<PlateID>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:12|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notes:['Save the RNA illumination image as a MATLAB .mat file (to preserve floating point values). Each illumination image is prepended with the plate ID for matching against the respective images. This file will be used in the feature extraction pipeline.']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
    Select the type of image to save:Image
    Select the image to save:IllumRNA
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<PlateID>_IllumRNA
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    Saved file format:mat
    Output file location:Default Output Folder|/imaging/analysis/2008_12_04_Imaging_CDRP_for_MLPCN/Pilot_rerun_illumcorr/\\\\g<PlateID>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:13|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notes:['Save the AGP illumination image as a MATLAB .mat file (to preserve floating point values). Each illumination image is prepended with the plate ID for matching against the respective images. This file will be used in the feature extraction pipeline.']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
    Select the type of image to save:Image
    Select the image to save:IllumAGP
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<PlateID>_IllumAGP
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    Saved file format:mat
    Output file location:Default Output Folder|/imaging/analysis/2008_12_04_Imaging_CDRP_for_MLPCN/Pilot_rerun_illumcorr/\\\\g<PlateID>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:14|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notes:['Save the Mito illumination image as a MATLAB .mat file (to preserve floating point values). Each illumination image is prepended with the plate ID for matching against the respective images. This file will be used in the feature extraction pipeline.']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
    Select the type of image to save:Image
    Select the image to save:IllumMito
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<PlateID>_IllumMito
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    Saved file format:mat
    Output file location:Default Output Folder|/imaging/analysis/2008_12_04_Imaging_CDRP_for_MLPCN/Pilot_rerun_illumcorr/\\\\g<PlateID>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
CreateBatchFiles:[module_num:15|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notes:['This module is used only if running the pipeline on a computing cluster; it is used to convert all paths to the format as seen by the computing node. If not using a computing cluster (i.e, you are running the pipeline locally), disable this module by clicking on the green checkmark to the left of the module name; the checkmark is grayed out when the module is disabled.']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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:/cbnt/cbimage/HCS
    Cluster root path:/cbnt/cbimage/HCS
